<?xml version='1.0' encoding='UTF-8'?>
<!--
This CellML file was generated on 30/10/2007 at 14:23:50 using:

COR (0.9.31.801)
Copyright 2002-2007 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
-->
<model cmeta:id="chay_keizer" name="chay_keizer" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="millisec">
        <unit prefix="milli" units="second"/>
    </units>
    <units name="per_millisec">
        <unit exponent="-1" prefix="milli" units="second"/>
    </units>
    <units name="milliV">
        <unit prefix="milli" units="volt"/>
    </units>
    <units name="nanoA">
        <unit prefix="nano" units="ampere"/>
    </units>
    <units name="femtoF">
        <unit prefix="nano" units="farad"/>
    </units>
    <units name="picoS">
        <unit prefix="pico" units="siemens"/>
    </units>
    <units name="microM_per_femtoA_millisec">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="litre"/>
        <unit exponent="-1" prefix="femto" units="ampere"/>
        <unit exponent="-1" prefix="milli" units="second"/>
    </units>
    <units name="microM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <component name="environment">
        <variable name="time" public_interface="out" units="millisec"/>
    </component>
    <component name="membrane">
        <variable name="time" public_interface="in" units="millisec"/>
        <variable cmeta:id="membrane_voltage" initial_value="-60" name="V" public_interface="out" units="milliV">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
			<rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_voltage">
				<bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
			</rdf:Description>
		</rdf:RDF>
		</variable>
        <variable name="I_Ca" public_interface="in" units="nanoA"/>
        <variable name="I_K" public_interface="in" units="nanoA"/>
        <variable name="I_KCa" public_interface="in" units="nanoA"/>
        <variable name="I_leak" public_interface="in" units="nanoA"/>
      	<variable initial_value="0" name="I_stim" units="nanoA" cmeta:id="membrane_stimulus_current">
        	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            	<rdf:Description rdf:about="#membrane_stimulus_current">
					<bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current"/>
            	</rdf:Description>
        	</rdf:RDF>
		</variable>
        <variable initial_value="5300.0" name="Cm" units="femtoF" cmeta:id="membrane_capacitance">
        	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            	<rdf:Description rdf:about="#membrane_capacitance">
					<bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance"/>
            	</rdf:Description>
        	</rdf:RDF>
		</variable>
			
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>V</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <minus/>
                                        <ci>I_K</ci>
                                    </apply>
                                    <ci>I_Ca</ci>
                                </apply>
                                <ci>I_KCa</ci>
                            </apply>
                            <ci>I_leak</ci>
                        </apply>
                        <ci>I_stim</ci>
                    </apply>
                    <ci>Cm</ci>
                </apply>
            </apply>
        </math>
    </component>
    <!-- Leak channel contribution-->
    <component name="leak_channel">
        <variable name="V" public_interface="in" units="milliV"/>
        <variable name="I_leak" public_interface="out" units="nanoA"/>
        <variable initial_value="150" name="g_leak" units="picoS"/>
        <variable initial_value="-75" name="V_leak" units="milliV"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I_leak</ci>
                <apply>
                    <times/>
                    <ci>g_leak</ci>
                    <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>V_leak</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <!-- Ca channel contribution-->
    <component name="Ca_channel">
        <variable name="V" public_interface="in" units="milliV"/>
        <variable name="I_Ca" public_interface="out" units="nanoA"/>
        <variable initial_value="25" name="V_Ca" units="milliV"/>
        <variable initial_value="1000" name="g_Ca" units="picoS"/>
        <variable initial_value="-20" name="v_1" units="milliV"/>
        <variable initial_value="24" name="v_2" units="milliV"/>
        <variable name="m_inf" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>m_inf</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">0.5</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <tanh/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci>V</ci>
                                    <ci>v_1</ci>
                                </apply>
                                <ci>v_2</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_Ca</ci>
                <apply>
                    <times/>
                    <ci>g_Ca</ci>
                    <ci>m_inf</ci>
                    <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>V_Ca</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <!-- K channel contribution-->
    <component name="K_channel">
        <variable name="time" public_interface="in" units="millisec"/>
        <variable name="V" public_interface="in" units="milliV"/>
        <variable name="I_K" public_interface="out" units="nanoA"/>
        <variable initial_value="2700" name="g_K" units="picoS"/>
        <variable initial_value="-75" name="V_K" public_interface="out" units="milliV"/>
        <variable initial_value="-16" name="v_3" units="milliV"/>
        <variable initial_value="11.2" name="v_4" units="milliV"/>
        <variable initial_value="28.57" name="tau" units="millisec"/>
        <variable name="phi" units="dimensionless"/>
        <variable name="w_inf" units="dimensionless"/>
        <variable initial_value="0.22" name="w" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>w_inf</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">0.5</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <tanh/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci>V</ci>
                                    <ci>v_3</ci>
                                </apply>
                                <ci>v_4</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>phi</ci>
                <apply>
                    <sech/>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>V</ci>
                            <ci>v_3</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">2</cn>
                            <ci>v_4</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>w</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>w_inf</ci>
                        <ci>w</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>phi</ci>
                        <ci>tau</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_K</ci>
                <apply>
                    <times/>
                    <ci>g_K</ci>
                    <ci>w</ci>
                    <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>V_K</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <!-- KCa channel contribution-->
    <component name="KCa_channel">
        <variable name="V" public_interface="in" units="milliV"/>
        <variable name="V_K" public_interface="in" units="milliV"/>
        <variable name="Ca_concentration" public_interface="in" units="microM"/>
        <variable name="I_KCa" public_interface="out" units="nanoA"/>
        <variable initial_value="5" name="K_KCa" units="microM"/>
        <variable initial_value="2000" name="g_KCa" units="picoS"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I_KCa</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>g_KCa</ci>
                        <apply>
                            <minus/>
                            <ci>V</ci>
                            <ci>V_K</ci>
                        </apply>
                        <ci>Ca_concentration</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>Ca_concentration</ci>
                        <ci>K_KCa</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <!-- Intracellular Ca concentration -->
    <component name="intracellular_Ca">
        <variable name="time" public_interface="in" units="millisec"/>
        <variable name="I_Ca" public_interface="in" units="nanoA"/>
        <variable initial_value="0.018" name="Ca_concentration" public_interface="out" units="microM"/>
        <variable initial_value="1e-3" name="f_i" units="dimensionless"/>
        <variable initial_value="4.5e-6" name="alpha" units="microM_per_femtoA_millisec"/>
        <variable initial_value="0.15" name="v_LPM" units="per_millisec"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Ca_concentration</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>f_i</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <apply>
                                <minus/>
                                <ci>alpha</ci>
                            </apply>
                            <ci>I_Ca</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>v_LPM</ci>
                            <ci>Ca_concentration</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="containment"/>
        <component_ref component="membrane">
            <component_ref component="Ca_channel"/>
            <component_ref component="K_channel"/>
            <component_ref component="KCa_channel"/>
            <component_ref component="leak_channel"/>
        </component_ref>
    </group>
    <!-- Mappings-->
    <connection>
        <map_components component_1="environment" component_2="membrane"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="intracellular_Ca"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="K_channel"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="Ca_channel"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="I_Ca" variable_2="I_Ca"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="K_channel"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="I_K" variable_2="I_K"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="KCa_channel"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="I_KCa" variable_2="I_KCa"/>
    </connection>
    <connection>
        <map_components component_1="K_channel" component_2="KCa_channel"/>
        <map_variables variable_1="V_K" variable_2="V_K"/>
    </connection>
    <connection>
        <map_components component_1="intracellular_Ca" component_2="KCa_channel"/>
        <map_variables variable_1="Ca_concentration" variable_2="Ca_concentration"/>
    </connection>
    <connection>
        <map_components component_1="intracellular_Ca" component_2="Ca_channel"/>
        <map_variables variable_1="I_Ca" variable_2="I_Ca"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="leak_channel"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="I_leak" variable_2="I_leak"/>
    </connection>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_voltage">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
    </rdf:RDF>
</model>
