def model Tong_2014 as
  // units
  def unit msec as
    unit second {pref: milli};
  enddef;
  def unit joule_per_kelvin_per_kilomole as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1, pref: kilo};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit liter {expo: -1};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_msec as
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit M_per_msec as
    unit mole;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit per_msec as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit uF_per_cm2 as
    unit farad {pref: micro};
    unit meter {expo: -2, pref: centi};
  enddef;
  def unit cm2_per_uL as
    unit meter {expo: 2, pref: centi};
    unit liter {expo: -1, pref: micro};
  enddef;
  def unit mS_per_cm2 as
    unit siemens {pref: milli};
    unit meter {expo: -2, pref: centi};
  enddef;
  def unit uA_per_cm2 as
    unit ampere {pref: micro};
    unit meter {expo: -2, pref: centi};
  enddef;
  def unit nM as
    unit mole {pref: nano};
    unit liter {expo: -1};
  enddef;
  def unit uN as
    unit newton {pref: micro};
  enddef;
  def unit nM_to_mM as
    unit mM;
    unit nM {expo: -1};
  enddef;
  def unit mM_to_M as
    unit mole;
    unit mM {expo: -1};
  enddef;
  // Model - stimulation interface

  def comp interface as
    var I_hold: uA_per_cm2 {init: 0, pub: none};
    var I_test: uA_per_cm2 {init: -0.25, pub: none};
    var stim_start: msec {init: 1000};
    var stim_interval: msec {init: 46500};
    var stim_duration: msec {init: 10000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var I_stim: uA_per_cm2 {priv: out};
    var time: msec {priv: in};
    I_stim = sel
      case time < stim_start:
        0.0{uA_per_cm2};
      case time-(stim_start+stim_duration) < 0{msec}:
        I_test;
      case rem(time, stim_interval+stim_duration) < stim_duration:
        I_test;
      otherwise:
        0.0{uA_per_cm2};
    endsel;
  enddef;
  def map between interface and environment for
    vars time and time;
  enddef;
  def map between interface and membrane_potential for
    vars I_stim and I_stim;
  enddef;
  // Model - Time variable

  def comp environment as
    var time: msec {pub: out};
  enddef;
  // Model - V variable

  def comp membrane_potential as
    var I_tot: uA_per_cm2 {pub: none};
    var I_Ca_tot: uA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var v: mV {init: -50.80774403486136, pub: out};
    var I_stim: uA_per_cm2 {pub: in};
    var time: msec {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var ina: uA_per_cm2 {pub: in};
    var ical: uA_per_cm2 {pub: in};
    var icat: uA_per_cm2 {pub: in};
    var ib: uA_per_cm2 {pub: in};
    var iherg: uA_per_cm2 {pub: in};
    var ikcnq1: uA_per_cm2 {pub: in};
    var ikcnq4: uA_per_cm2 {pub: in};
    var ikcnq5: uA_per_cm2 {pub: in};
    var ik1: uA_per_cm2 {pub: in};
    var ik2: uA_per_cm2 {pub: in};
    var ika: uA_per_cm2 {pub: in};
    var iBKa: uA_per_cm2 {pub: in};
    var iBKab: uA_per_cm2 {pub: in};
    var ih: uA_per_cm2 {pub: in};
    var icl: uA_per_cm2 {pub: in};
    var insna: uA_per_cm2 {pub: in};
    var insca: uA_per_cm2 {pub: in};
    var insk: uA_per_cm2 {pub: in};
    var inak: uA_per_cm2 {pub: in};
    var inaca: uA_per_cm2 {pub: in};
    I_Ca_tot = ical+icat+insca;
    I_tot = ina+ih+inaca+inak+ical+icat+icl+iherg+ikcnq1+ikcnq4+ikcnq5+ik1+ik2+ika+iBKa+iBKab+insna+insk+insca+ib;
    ode(v, time) = -(I_tot+I_stim);
  enddef;
  def map between membrane_potential and environment for
    vars time and time;
  enddef;
  def map between membrane_potential and parameters for
    vars Cm and Cm;
    vars v and v;
  enddef;
  // Model - Cai variable

  def comp Ca_Concentrations as
    var J_tot: mM_per_msec {pub: none};
    var J_Ca_mem: mM_per_msec {pub: none};
    var cai: mM {init: 0.0001235555354004079, pub: out};
    var time: msec {pub: in};
    var jnaca: mM_per_msec {pub: in};
    var jpmca: mM_per_msec {pub: in};
    var I_Ca_tot: uA_per_cm2 {pub: in};
    var buff: dimensionless {pub: in};
    var AV: cm2_per_uL {pub: in};
    var zca: dimensionless {pub: in};
    var frdy: coulomb_per_mole {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    J_Ca_mem = AV*Cm*buff/(zca*frdy)*I_Ca_tot;
    var jcamem_plot: M_per_msec {pub: none};
    var jpmca_plot: M_per_msec {pub: none};
    var jnaca_plot: M_per_msec {pub: none};
    var conversion: mM_to_M {init: 1000, pub: none};
    jcamem_plot = J_Ca_mem*conversion;
    jpmca_plot = jpmca*conversion;
    jnaca_plot = jnaca*conversion;
    J_tot = J_Ca_mem+jnaca+jpmca;
    ode(cai, time) = -J_tot;
  enddef;
  def map between Ca_Concentrations and environment for
    vars time and time;
  enddef;
  def map between Ca_Concentrations and membrane_potential for
    vars I_Ca_tot and I_Ca_tot;
  enddef;
  def map between Ca_Concentrations and parameters for
    vars cai and cai;
    vars buff and buff;
    vars AV and AV;
    vars zca and zca;
    vars frdy and frdy;
    vars Cm and Cm;
  enddef;
  // Model - Parameters

  def comp parameters as
    var ki: mM {pub: out};
    var nai: mM {pub: out};
    var cli: mM {pub: out};
    var ko: mM {pub: out};
    var cao: mM {pub: out};
    var nao: mM {pub: out};
    var clo: mM {pub: out};
    var mgo: mM {pub: out};
    // modifiable-parameter: yes
    var buff: dimensionless {pub: out};
    var AV: cm2_per_uL {pub: out};
    var zca: dimensionless {pub: out};
    var zna: dimensionless {pub: out};
    var zk: dimensionless {pub: out};
    var R: joule_per_kelvin_per_kilomole {pub: out};
    var frdy: coulomb_per_mole {pub: out};
    var temp: kelvin {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: uF_per_cm2 {init: 1.0, pub: out};
    // modifiable-parameter: yes
    var gna: mS_per_cm2 {pub: out};
    // modifiable-parameter: yes
    var gcal: mS_per_cm2 {pub: out};
    var ecal: mV {pub: out};
    var kmca: mM {pub: out};
    // modifiable-parameter: yes
    var gcat: mS_per_cm2 {pub: out};
    var ecat: mV {pub: out};
    var gkca: mS_per_cm2 {pub: out};
    var gb: mS_per_cm2 {pub: out};
    // modifiable-parameter: yes
    var gk1: mS_per_cm2 {pub: out};
    var gk2: mS_per_cm2 {pub: out};
    var gbka: dimensionless {pub: out};
    var gbkab: dimensionless {pub: out};
    var gka: mS_per_cm2 {pub: out};
    // modifiable-parameter: yes
    var gkq1: mS_per_cm2 {pub: out};
    // modifiable-parameter: yes
    var gkq4: mS_per_cm2 {pub: out};
    // modifiable-parameter: yes
    var gkq5: mS_per_cm2 {pub: out};
    // modifiable-parameter: yes
    var gherg: mS_per_cm2 {pub: out};
    var gcl: mS_per_cm2 {pub: out};
    var gh: mS_per_cm2 {pub: out};
    var gns: mS_per_cm2 {pub: out};
    var PnsK: dimensionless {pub: out};
    var PnsNa: dimensionless {pub: out};
    var PnsCa: dimensionless {pub: out};
    var PnsCs: dimensionless {pub: out};
    var gnsCa: dimensionless {pub: out};
    var gnsNa: dimensionless {pub: out};
    var gnsK: dimensionless {pub: out};
    var gnsCs: dimensionless {pub: out};
    var ginak: uA_per_cm2 {pub: out};
    var nakKmko: mM {pub: out};
    var nakKmnai: mM {pub: out};
    var PK: dimensionless {pub: out};
    var PNa: dimensionless {pub: out};
    var Jpmca: mM_per_msec {pub: out};
    var Kmpmca: mM {pub: out};
    var npmca: dimensionless {pub: out};
    var Jnaca: mM_per_msec {pub: out};
    var Kmallo: mM {pub: out};
    var nallo: dimensionless {pub: out};
    var ksat: dimensionless {pub: out};
    var xgamma: dimensionless {pub: out};
    var Kmnai: mM {pub: out};
    var Kmcai: mM {pub: out};
    var Kmnao: mM {pub: out};
    var Kmcao: mM {pub: out};
    var Fmax: uN {pub: out};
    var FKm: nM {pub: out};
    var Fn: dimensionless {pub: out};
    ki = 140.0{mM};
    nai = 4.0{mM};
    cli = 46.0{mM};
    ko = 6.0{mM};
    cao = 2.5{mM};
    nao = 130.0{mM};
    clo = 130.0{mM};
    mgo = 0.5{mM};
    buff = 0.015{dimensionless};
    AV = 4.0{cm2_per_uL};
    zca = 2.0{dimensionless};
    zna = 1.0{dimensionless};
    zk = 1.0{dimensionless};
    R = 8314.0{joule_per_kelvin_per_kilomole};
    frdy = 96485.0{coulomb_per_mole};
    temp = 308.0{kelvin};
    gna = 0{mS_per_cm2};
    gcal = 0.6{mS_per_cm2};
    ecal = 45.0{mV};
    kmca = 0.001{mM};
    gcat = 0.058{mS_per_cm2};
    ecat = 42.0{mV};
    gkca = 0.8{mS_per_cm2};
    // cn cellml:units="mS_per_cm2">0.004</cn
    gb = 0.004{mS_per_cm2};
    // cn cellml:units="mS_per_cm2">0.24</cn
    gk1 = 0.52{mS_per_cm2};
    gk2 = 0.032{mS_per_cm2};
    gbka = 0.2{dimensionless};
    gbkab = 0.1{dimensionless};
    gka = 0.16{mS_per_cm2};
    // cn cellml:units="mS_per_cm2">0.0032</cn
    gkq1 = 0.00{mS_per_cm2};
    // cn cellml:units="mS_per_cm2">0.024</cni
    gkq4 = 0.0{mS_per_cm2};
    // cn cellml:units="mS_per_cm2">0.016</cn
    gkq5 = 0.0{mS_per_cm2};
    // cn cellml:units="mS_per_cm2">0.08</cn
    gherg = 0.0{mS_per_cm2};
    gcl = 0.1875{mS_per_cm2};
    gh = 0.0542{mS_per_cm2};
    gns = 0.0123{mS_per_cm2};
    PnsK = 1.3{dimensionless};
    PnsNa = 0.9{dimensionless};
    PnsCa = 0.89{dimensionless};
    PnsCs = 1.0{dimensionless};
    gnsCa = 0.5{dimensionless};
    gnsNa = 1.0{dimensionless};
    gnsK = 1.19{dimensionless};
    gnsCs = 1.6{dimensionless};
    ginak = 1.7{uA_per_cm2};
    nakKmko = 2.0{mM};
    nakKmnai = 22.0{mM};
    PK = 1.0{dimensionless};
    PNa = 0.35{dimensionless};
    Jpmca = 0.00000035{mM_per_msec};
    Kmpmca = 0.0005{mM};
    npmca = 2{dimensionless};
    Jnaca = 0.0000035{mM_per_msec};
    Kmallo = 0.0003{mM};
    nallo = 4{dimensionless};
    ksat = 0.27{dimensionless};
    xgamma = 0.35{dimensionless};
    Kmnai = 30.0{mM};
    Kmcai = 0.007{mM};
    Kmnao = 87.5{mM};
    Kmcao = 1.3{mM};
    Fmax = 3.0{uN};
    FKm = 161.301{nM};
    Fn = 3.60205{dimensionless};
    var vFRT: dimensionless {pub: out};
    var ena: mV {pub: out};
    var ek: mV {pub: out};
    var eh: mV {pub: out};
    var ecl: mV {pub: out};
    var enscc: mV {pub: out};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    vFRT = v*frdy/(R*temp);
    ena = R*temp/frdy*ln(nao/nai);
    ek = R*temp/frdy*ln(ko/ki);
    eh = R*temp/frdy*ln((ko+PNa/PK*nao)/(ki+PNa/PK*nai));
    ecl = R*temp/frdy*ln(cli/clo);
    enscc = R*temp/frdy*ln((PnsK*ko+PnsNa*nao+4{dimensionless}*PnsCa*cao/(1.0{dimensionless}+exp(vFRT)))/(PnsK*ki+PnsNa*nai+4{dimensionless}*PnsCa*cai/(1.0{dimensionless}+exp(vFRT))));
  enddef;
  // Model - Force and w variable

  def comp Ca_dependent_Force as
    var wss: dimensionless {pub: none};
    var wtc: msec {pub: none};
    var conversion: nM_to_mM {init: 1e-6, pub: none};
    var Force: uN {pub: none};
    var w: dimensionless {init: 0.2768302028689621, pub: none};
    var time: msec {pub: in};
    var cai: mM {pub: in};
    var Fmax: uN {pub: in};
    var FKm: nM {pub: in};
    var Fn: dimensionless {pub: in};
    wss = 1.0{dimensionless}/(1.0{dimensionless}+pow(FKm*conversion/cai, Fn));
    wtc = 4000.0{msec}*(0.234845{dimensionless}+(1.0{dimensionless}-0.234845{dimensionless})/(1.0{dimensionless}+pow(cai/(FKm*conversion), Fn)));
    Force = Fmax*(w-0.2345{dimensionless});
    ode(w, time) = (wss-w)/wtc;
  enddef;
  def map between Ca_dependent_Force and environment for
    vars time and time;
  enddef;
  def map between Ca_dependent_Force and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between Ca_dependent_Force and parameters for
    vars Fmax and Fmax;
    vars FKm and FKm;
    vars Fn and Fn;
  enddef;
  // Model - currents

  def comp I_Na as
    var mss: dimensionless {pub: none};
    var hss: dimensionless {pub: none};
    var mtc: msec {pub: none};
    var htc: msec {pub: none};
    var m: dimensionless {init: 0.166998688814229, pub: none};
    var h: dimensionless {init: 0.3156075507278521, pub: none};
    var ina: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ena: mV {pub: in};
    var gna: mS_per_cm2 {pub: in};
    mss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+35.9584{mV})/9.24013{mV}));
    hss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+57.0{mV})/8.0{mV}));
    mtc = 0.25{msec}+7.0{msec}/(1.0{dimensionless}+exp((v+38.0{mV})/10.0{mV}));
    htc = 0.9{msec}+1002.85{msec}/(1.0{dimensionless}+sqr((v+47.5{mV})/1.5{mV}));
    ina = gna*m*m*m*h*(v-ena);
    ode(m, time) = (mss-m)/mtc;
    ode(h, time) = (hss-h)/htc;
  enddef;
  def map between I_Na and environment for
    vars time and time;
  enddef;
  def map between I_Na and membrane_potential for
    vars v and v;
    vars ina and ina;
  enddef;
  def map between I_Na and parameters for
    vars ena and ena;
    vars gna and gna;
  enddef;
  // Model - currents

  def comp I_CaL as
    var dss: dimensionless {pub: none};
    var fss: dimensionless {pub: none};
    var fca: dimensionless {pub: none};
    var dtc: msec {pub: none};
    var f1tc: msec {pub: none};
    var f2tc: msec {pub: none};
    var d: dimensionless {init: 0.01605749091924106, pub: none};
    var f1: dimensionless {init: 0.861723329545759, pub: none};
    var f2: dimensionless {init: 0.8617233295451014, pub: none};
    var ical: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ecal: mV {pub: in};
    var gcal: mS_per_cm2 {pub: in};
    var kmca: mM {pub: in};
    fca = 1.0{dimensionless}/(1.0{dimensionless}+pow(cai/kmca, 4.0{dimensionless}));
    dss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+22.0{mV})/7.0{mV}));
    fss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+38.0{mV})/7.0{mV}));
    dtc = 2.29{msec}+5.7{msec}/(1.0{dimensionless}+sqr((v+29.97{mV})/9.0{mV}));
    f1tc = 12.0{msec};
    f2tc = 90.9699{msec}*(1.0{dimensionless}-1.0{dimensionless}/((1.0{dimensionless}+exp((v+13.9629{mV})/45.3782{mV}))*(1.0{dimensionless}+exp(-(v+9.49866{mV})/3.3945{mV}))));
    ical = gcal*fca*d*d*(0.8{dimensionless}*f1+0.2{dimensionless}*f2)*(v-ecal);
    ode(d, time) = (dss-d)/dtc;
    ode(f1, time) = (fss-f1)/f1tc;
    ode(f2, time) = (fss-f2)/f2tc;
  enddef;
  def map between I_CaL and environment for
    vars time and time;
  enddef;
  def map between I_CaL and membrane_potential for
    vars v and v;
    vars ical and ical;
  enddef;
  def map between I_CaL and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between I_CaL and parameters for
    vars ecal and ecal;
    vars gcal and gcal;
    vars kmca and kmca;
  enddef;
  // Model - currents

  def comp I_CaT as
    var bss: dimensionless {pub: none};
    var gss: dimensionless {pub: none};
    var btc: msec {pub: none};
    var gtc: msec {pub: none};
    var b: dimensionless {init: 0.5857399935992883, pub: none};
    var g: dimensionless {init: 0.02817518341064734, pub: none};
    var icat: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ecat: mV {pub: in};
    var gcat: mS_per_cm2 {pub: in};
    bss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+54.23{mV})/9.88{mV}));
    gss = 0.02{dimensionless}+0.98{dimensionless}/(1.0{dimensionless}+exp((v+72.978{mV})/4.64{mV}));
    btc = 0.45{msec}+3.9{msec}/(1.0{dimensionless}+sqr((v+66.0{mV})/26.0{mV}));
    gtc = 150.0{msec}*(1.0{dimensionless}-1.0{dimensionless}/((1.0{dimensionless}+exp((v-417.43{mV})/203.18{mV}))*(1.0{dimensionless}+exp(-(v+61.11{mV})/8.07{mV}))));
    icat = gcat*b*b*g*(v-ecat);
    ode(b, time) = (bss-b)/btc;
    ode(g, time) = (gss-g)/gtc;
  enddef;
  def map between I_CaT and environment for
    vars time and time;
  enddef;
  def map between I_CaT and membrane_potential for
    vars v and v;
    vars icat and icat;
  enddef;
  def map between I_CaT and parameters for
    vars ecat and ecat;
    vars gcat and gcat;
  enddef;
  // Model - currents

  def comp I_b as
    var ib: uA_per_cm2 {pub: out};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gb: mS_per_cm2 {pub: in};
    ib = gb*(v-ek);
  enddef;
  def map between I_b and membrane_potential for
    vars v and v;
    vars ib and ib;
  enddef;
  def map between I_b and parameters for
    vars ek and ek;
    vars gb and gb;
  enddef;
  // Model - currents

  def comp I_HERG as
    var hnss: dimensionless {pub: none};
    var hsss: dimensionless {pub: none};
    var hn1tc: msec {pub: none};
    var hn2tc: msec {pub: none};
    var hstc: msec {pub: none};
    var hn1: dimensionless {init: 0.02498997383730429, pub: none};
    var hn2: dimensionless {init: 0.02498997383730429, pub: none};
    var hs: dimensionless {init: 0.5292140214748325, pub: none};
    var iherg: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gherg: mS_per_cm2 {pub: in};
    hnss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+16.0{mV})/9.5{mV}));
    hsss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+48.0{mV})/24.0{mV}));
    hn1tc = 46.0999{msec}+1685.76{msec}/((1.0{dimensionless}+exp(-(v+40.8489{mV})/13.7802{mV}))*(1.0{dimensionless}+exp((v+20.6372{mV})/15.1113{mV})));
    hn2tc = 475.667{msec}+16321.6{msec}/((1.0{dimensionless}+exp(-(v+41.8328{mV})/6.96673{mV}))*(1.0{dimensionless}+exp((v+23.2432{mV})/21.2949{mV})));
    hstc = 19.7864{msec}/(1.0{dimensionless}+sqr((v+20.7136{mV})/44.2868{mV}))-0.378843{msec};
    iherg = gherg*(0.8{dimensionless}*hn1+0.2{dimensionless}*hn2)*hs*(v-ek);
    ode(hn1, time) = (hnss-hn1)/hn1tc;
    ode(hn2, time) = (hnss-hn2)/hn2tc;
    ode(hs, time) = (hsss-hs)/hstc;
  enddef;
  def map between I_HERG and environment for
    vars time and time;
  enddef;
  def map between I_HERG and membrane_potential for
    vars v and v;
    vars iherg and iherg;
  enddef;
  def map between I_HERG and parameters for
    vars ek and ek;
    vars gherg and gherg;
  enddef;
  // Model - currents

  def comp I_KCNQ1 as
    var nq1ss: dimensionless {pub: none};
    var wq1ss: dimensionless {pub: none};
    var sq1ss: dimensionless {pub: none};
    var nq1ftc: msec {pub: none};
    var nq1stc: msec {pub: none};
    var wq1tc: msec {pub: none};
    var sq1tc: msec {pub: none};
    var nq1f: dimensionless {init: 0.09043683263784785, pub: none};
    var nq1s: dimensionless {init: 0.09043683263784785, pub: none};
    var wq1: dimensionless {init: 0.9230513956601629, pub: none};
    var sq1: dimensionless {init: 0.7426740827665872, pub: none};
    var ikcnq1: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gkq1: mS_per_cm2 {pub: in};
    nq1ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+22.0{mV})/12.48{mV}));
    wq1ss = 0.49{dimensionless}+0.51{dimensionless}/(1.0{dimensionless}+exp((v+1.084{mV})/28.78{mV}));
    sq1ss = 0.34{dimensionless}+0.66{dimensionless}/(1.0{dimensionless}+exp((v+45.3{mV})/12.3{mV}));
    nq1ftc = 395.3{msec}/(1.0{dimensionless}+sqr((v+38.1{mV})/33.59{mV}));
    nq1stc = 5503.0{msec}+5345.4{msec}/(1.0{dimensionless}+pow(10.0{dimensionless}, (-23.9{mV}-v)*(-0.02827{per_mV})))-4590.6{msec}/(1.0{dimensionless}+pow(10.0{dimensionless}, (v+14.15{mV})*(-0.0357{per_mV})));
    wq1tc = 5.44{msec}+29.2{msec}/(1.0{dimensionless}+sqr((v+48.09{mV})/48.83{mV}));
    sq1tc = 50000.0{msec};
    ikcnq1 = gkq1*(0.3{dimensionless}*nq1f+0.7{dimensionless}*nq1s)*wq1*sq1*(v-ek);
    ode(nq1f, time) = (nq1ss-nq1f)/nq1ftc;
    ode(nq1s, time) = (nq1ss-nq1s)/nq1stc;
    ode(wq1, time) = (wq1ss-wq1)/wq1tc;
    ode(sq1, time) = (sq1ss-sq1)/sq1tc;
  enddef;
  def map between I_KCNQ1 and environment for
    vars time and time;
  enddef;
  def map between I_KCNQ1 and membrane_potential for
    vars v and v;
    vars ikcnq1 and ikcnq1;
  enddef;
  def map between I_KCNQ1 and parameters for
    vars ek and ek;
    vars gkq1 and gkq1;
  enddef;
  // Model - currents

  def comp I_KCNQ4 as
    var nq4ss: dimensionless {pub: none};
    var sq4ss: dimensionless {pub: none};
    var nq4tc: msec {pub: none};
    var sq4tc: msec {pub: none};
    var nq4: dimensionless {init: 0.1081102112425531, pub: none};
    var sq4: dimensionless {init: 0.6280622663818354, pub: none};
    var ikcnq4: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gkq4: mS_per_cm2 {pub: in};
    nq4ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+15.04{mV})/16.95{mV}));
    sq4ss = 0.4058{dimensionless}/(1.0{dimensionless}+exp((v+86.84{mV})/15.05{mV}))+0.5942{dimensionless}/(1.0{dimensionless}+exp((v-70.13{mV})/13.37{mV}));
    nq4tc = 10.0{msec}+895.9{msec}/(1.0{dimensionless}+exp((-18.01{mV}-v)/31.04{mV}));
    sq4tc = 1077.0{msec}+185845.0{msec}/(1.0{dimensionless}+sqr((v-39.44{mV})/7.344{mV}));
    ikcnq4 = gkq4*nq4*sq4*(v-ek);
    ode(nq4, time) = (nq4ss-nq4)/nq4tc;
    ode(sq4, time) = (sq4ss-sq4)/sq4tc;
  enddef;
  def map between I_KCNQ4 and environment for
    vars time and time;
  enddef;
  def map between I_KCNQ4 and membrane_potential for
    vars v and v;
    vars ikcnq4 and ikcnq4;
  enddef;
  def map between I_KCNQ4 and parameters for
    vars ek and ek;
    vars gkq4 and gkq4;
  enddef;
  // Model - currents

  def comp I_KCNQ5 as
    var nq5ss: dimensionless {pub: none};
    var wq5ss: dimensionless {pub: none};
    var sq5ss: dimensionless {pub: none};
    var nq5ftc: msec {pub: none};
    var nq5stc: msec {pub: none};
    var wq5tc: msec {pub: none};
    var sq5tc: msec {pub: none};
    var nq5f: dimensionless {init: 0.2618890409031491, pub: none};
    var nq5s: dimensionless {init: 0.2618890409031491, pub: none};
    var wq5: dimensionless {init: 0.9230513956601629, pub: none};
    var sq5: dimensionless {init: 0.6280622663818354, pub: none};
    var ikcnq5: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gkq5: mS_per_cm2 {pub: in};
    nq5ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+36.55{mV})/13.76{mV}));
    wq5ss = 0.49{dimensionless}+0.51{dimensionless}/(1.0{dimensionless}+exp((v+1.084{mV})/28.78{mV}));
    sq5ss = 0.4058{dimensionless}/(1.0{dimensionless}+exp((v+86.84{mV})/15.05{mV}))+0.5942{dimensionless}/(1.0{dimensionless}+exp((v-70.13{mV})/13.37{mV}));
    nq5ftc = 37.51{msec}+539.0{msec}/(1.0{dimensionless}+sqr((v+40.24{mV})/17.72{mV}));
    nq5stc = 1000.0{msec};
    wq5tc = 5.44{msec}+29.2{msec}/(1.0{dimensionless}+sqr((v+48.09{mV})/48.83{mV}));
    sq5tc = 1077.0{msec}+185845.0{msec}/(1.0{dimensionless}+sqr((v-39.44{mV})/7.344{mV}));
    ikcnq5 = gkq5*(0.2{dimensionless}*nq5f+0.8{dimensionless}*nq5s)*wq5*sq5*(v-ek);
    ode(nq5f, time) = (nq5ss-nq5f)/nq5ftc;
    ode(nq5s, time) = (nq5ss-nq5s)/nq5stc;
    ode(wq5, time) = (wq5ss-wq5)/wq5tc;
    ode(sq5, time) = (sq5ss-sq5)/sq5tc;
  enddef;
  def map between I_KCNQ5 and environment for
    vars time and time;
  enddef;
  def map between I_KCNQ5 and membrane_potential for
    vars v and v;
    vars ikcnq5 and ikcnq5;
  enddef;
  def map between I_KCNQ5 and parameters for
    vars ek and ek;
    vars gkq5 and gkq5;
  enddef;
  // Model - currents

  def comp I_K1 as
    var qss: dimensionless {pub: none};
    var rss: dimensionless {pub: none};
    var qtc: msec {pub: none};
    var r1tc: msec {pub: none};
    var r2tc: msec {pub: none};
    var q: dimensionless {init: 0.22560249352574, pub: none};
    var r1: dimensionless {init: 0.1261674553968813, pub: none};
    var r2: dimensionless {init: 0.1261674420211442, pub: none};
    var ik1: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gk1: mS_per_cm2 {pub: in};
    qss = 0.978613{dimensionless}/(1.0{dimensionless}+exp(-(v+18.6736{mV})/26.6606{mV}));
    rss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+63.0{mV})/6.3{mV}));
    qtc = 500.0{msec}/(1.0{dimensionless}+sqr((v+60.71{mV})/15.79{mV}));
    r1tc = 5000.0{msec}/(1.0{dimensionless}+sqr((v+62.7133{mV})/35.8611{mV}));
    r2tc = 30000.0{msec}+220000.0{msec}/(1.0{dimensionless}+exp((v+22.0{mV})/4.0{mV}));
    ik1 = gk1*q*q*(0.38{dimensionless}*r1+0.63{dimensionless}*r2)*(v-ek);
    ode(q, time) = (qss-q)/qtc;
    ode(r1, time) = (rss-r1)/r1tc;
    ode(r2, time) = (rss-r2)/r2tc;
  enddef;
  def map between I_K1 and environment for
    vars time and time;
  enddef;
  def map between I_K1 and membrane_potential for
    vars v and v;
    vars ik1 and ik1;
  enddef;
  def map between I_K1 and parameters for
    vars ek and ek;
    vars gk1 and gk1;
  enddef;
  // Model - currents

  def comp I_K2 as
    var pss: dimensionless {pub: none};
    var kss: dimensionless {pub: none};
    var ptc: msec {pub: none};
    var k1tc: msec {pub: none};
    var k2tc: msec {pub: none};
    var p: dimensionless {init: 0.1358747732875166, pub: none};
    var k1: dimensionless {init: 0.9944827384537837, pub: none};
    var k2: dimensionless {init: 0.9944827384537837, pub: none};
    var ik2: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gk2: mS_per_cm2 {pub: in};
    pss = 0.948{dimensionless}/(1.0{dimensionless}+exp(-(v+17.91{mV})/18.4{mV}));
    kss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+21.2{mV})/5.7{mV}));
    ptc = 100.0{msec}/(1.0{dimensionless}+sqr((v+64.1{mV})/28.67{mV}));
    k1tc = 1000000.0{msec}*(1.0{dimensionless}-1.0{dimensionless}/((1.0{dimensionless}+exp((v-315.0{mV})/50.0{mV}))*(1.0{dimensionless}+exp(-(v+74.9{mV})/8.0{mV}))));
    k2tc = 2500000.0{msec}*(1.0{dimensionless}-1.0{dimensionless}/((1.0{dimensionless}+exp((v-132.868{mV})/25.3992{mV}))*(1.0{dimensionless}+exp(-(v+24.9203{mV})/2.67915{mV}))));
    ik2 = gk2*p*p*(0.75{dimensionless}*k1+0.25{dimensionless}*k2)*(v-ek);
    ode(p, time) = (pss-p)/ptc;
    ode(k1, time) = (kss-k1)/k1tc;
    ode(k2, time) = (kss-k2)/k2tc;
  enddef;
  def map between I_K2 and environment for
    vars time and time;
  enddef;
  def map between I_K2 and membrane_potential for
    vars v and v;
    vars ik2 and ik2;
  enddef;
  def map between I_K2 and parameters for
    vars ek and ek;
    vars gk2 and gk2;
  enddef;
  // Model - currents

  def comp I_Ka as
    var sss: dimensionless {pub: none};
    var xss: dimensionless {pub: none};
    var stc: msec {pub: none};
    var xtc: msec {pub: none};
    var s: dimensionless {init: 0.04562272513582834, pub: none};
    var x: dimensionless {init: 0.06162789823439722, pub: none};
    var ika: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gka: mS_per_cm2 {pub: in};
    sss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+27.79{mV})/7.57{mV}));
    xss = 0.02{dimensionless}+0.98{dimensionless}/(1.0{dimensionless}+exp((v+69.5{mV})/6.0{mV}));
    stc = 17.0{msec}/(1.0{dimensionless}+sqr((v+20.5232{mV})/35.0{mV}));
    xtc = 7.5{msec}+10.0{msec}/(1.0{dimensionless}+sqr((v+34.1765{mV})/120.0{mV}));
    ika = gka*s*x*(v-ek);
    ode(s, time) = (sss-s)/stc;
    ode(x, time) = (xss-x)/xtc;
  enddef;
  def map between I_Ka and environment for
    vars time and time;
  enddef;
  def map between I_Ka and membrane_potential for
    vars v and v;
    vars ika and ika;
  enddef;
  def map between I_Ka and parameters for
    vars ek and ek;
    vars gka and gka;
  enddef;
  // Model - currents

  def comp I_BKa as
    var xass_z: dimensionless {pub: none};
    var xass_vh: mV {pub: none};
    var conversion: mM_to_M {init: 1000.0, pub: none};
    var xass: dimensionless {pub: none};
    var xatc: msec {pub: none};
    var xa: dimensionless {init: 0.0003575122973592095, pub: none};
    var iBKa: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ek: mV {pub: in};
    var gkca: mS_per_cm2 {pub: in};
    var gbka: dimensionless {pub: in};
    var R: joule_per_kelvin_per_kilomole {pub: in};
    var frdy: coulomb_per_mole {pub: in};
    var temp: kelvin {pub: in};
    xass_z = -0.749234{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion-0.0630535{mole})/0.161942{mole}))+8.38384{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion+1538.29{mole})/739.057{mole}));
    xass_vh = 5011.47{mV}/(1.0{dimensionless}+pow((cai*conversion+0.237503{mole})/0.000239278{mole}, 0.42291{dimensionless}))-37.5137{mV};
    xass = 1.0{dimensionless}/(1.0{dimensionless}+exp(-xass_z*frdy*(v-xass_vh)/(R*temp)));
    xatc = 2.40914{msec}/(1.0{dimensionless}+sqr((v-158.779{mV})/(-52.1497{mV})));
    iBKa = gkca*gbka*xa*(v-ek);
    ode(xa, time) = (xass-xa)/xatc;
  enddef;
  def map between I_BKa and environment for
    vars time and time;
  enddef;
  def map between I_BKa and membrane_potential for
    vars v and v;
    vars iBKa and iBKa;
  enddef;
  def map between I_BKa and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between I_BKa and parameters for
    vars ek and ek;
    vars gkca and gkca;
    vars gbka and gbka;
    vars R and R;
    vars frdy and frdy;
    vars temp and temp;
  enddef;
  // Model - currents

  def comp I_BKab as
    var xabss_z: dimensionless {pub: none};
    var xabss_vh: mV {pub: none};
    var conversion: mM_to_M {init: 1000.0, pub: none};
    var xabss: dimensionless {pub: none};
    var xabtc: msec {pub: none};
    var xab: dimensionless {init: 0.002673927875795617, pub: none};
    var iBKab: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ek: mV {pub: in};
    var gkca: mS_per_cm2 {pub: in};
    var gbkab: dimensionless {pub: in};
    var R: joule_per_kelvin_per_kilomole {pub: in};
    var frdy: coulomb_per_mole {pub: in};
    var temp: kelvin {pub: in};
    xabss_z = -0.681249{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion-0.218988{mole})/0.428335{mole}))+1.40001{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion+228.71{mole})/684.946{mole}));
    xabss_vh = 8540.23{mV}/(1.0{dimensionless}+pow((cai*conversion+0.401189{mole})/0.00399115{mole}, 0.668054{dimensionless}))-109.275{mV};
    xabss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-xabss_z*frdy*(v-xabss_vh)/(R*temp)));
    xabtc = 13.8049{msec}/(1.0{dimensionless}+sqr((v-153.019{mV})/66.4952{mV}));
    iBKab = gkca*gbkab*xab*(v-ek);
    ode(xab, time) = (xabss-xab)/xabtc;
  enddef;
  def map between I_BKab and environment for
    vars time and time;
  enddef;
  def map between I_BKab and membrane_potential for
    vars v and v;
    vars iBKab and iBKab;
  enddef;
  def map between I_BKab and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between I_BKab and parameters for
    vars ek and ek;
    vars gkca and gkca;
    vars gbkab and gbkab;
    vars R and R;
    vars frdy and frdy;
    vars temp and temp;
  enddef;
  // Model - currents

  def comp I_h as
    var yss: dimensionless {pub: none};
    var ytc: msec {pub: none};
    var ya: per_msec {pub: none};
    var yb: per_msec {pub: none};
    var y: dimensionless {init: 0.001821587846781853, pub: none};
    var ih: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var eh: mV {pub: in};
    var gh: mS_per_cm2 {pub: in};
    yss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+105.39{mV})/8.6553{mV}));
    ya = 0.0000035{per_msec}*exp(-0.0497{per_mV}*v);
    yb = 0.04003{per_msec}*exp(0.05211{per_mV}*v);
    ytc = 1.0{dimensionless}/(ya+yb);
    ih = gh*y*(v-eh);
    ode(y, time) = (yss-y)/ytc;
  enddef;
  def map between I_h and environment for
    vars time and time;
  enddef;
  def map between I_h and membrane_potential for
    vars v and v;
    vars ih and ih;
  enddef;
  def map between I_h and parameters for
    vars eh and eh;
    vars gh and gh;
  enddef;
  // Model - currents

  def comp I_Cl as
    var css: dimensionless {pub: none};
    var ctc: msec {pub: none};
    var K1cl: mM {pub: none};
    var K2cl: dimensionless {pub: none};
    var c: dimensionless {init: 0.0006695090454068198, pub: none};
    var icl: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ecl: mV {pub: in};
    var gcl: mS_per_cm2 {pub: in};
    var vFRT: dimensionless {pub: in};
    K1cl = 0.0006{mM}*exp(2.53{dimensionless}*vFRT);
    K2cl = 0.1{dimensionless}*exp(-5.0{dimensionless}*vFRT);
    css = 1.0{dimensionless}/(1.0{dimensionless}+K2cl*(sqr(K1cl/cai)+K1cl/cai+1.0{dimensionless}));
    ctc = -160.0{msec}+210.0{msec}/(1.0{dimensionless}+exp((v+4.56{mV})/11.62{mV}))+170.0{msec}/(1.0{dimensionless}+exp(-(v+25.5{mV})/11.62{mV}));
    icl = gcl*c*(v-ecl);
    ode(c, time) = (css-c)/ctc;
  enddef;
  def map between I_Cl and environment for
    vars time and time;
  enddef;
  def map between I_Cl and membrane_potential for
    vars v and v;
    vars icl and icl;
  enddef;
  def map between I_Cl and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between I_Cl and parameters for
    vars ecl and ecl;
    vars gcl and gcl;
    vars vFRT and vFRT;
  enddef;
  // Model - currents

  def comp I_ns as
    var fmg: dimensionless {pub: none};
    var gs_nao: dimensionless {pub: none};
    var gs_cao: dimensionless {pub: none};
    var gs_ko: dimensionless {pub: none};
    var tinyamount: mM {init: 1e-8, pub: none};
    var insna: uA_per_cm2 {pub: out};
    var insca: uA_per_cm2 {pub: out};
    var insk: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ko: mM {pub: in};
    var cao: mM {pub: in};
    var nao: mM {pub: in};
    var mgo: mM {pub: in};
    var enscc: mV {pub: in};
    var gns: mS_per_cm2 {pub: in};
    var gnsCa: dimensionless {pub: in};
    var gnsNa: dimensionless {pub: in};
    var gnsK: dimensionless {pub: in};
    fmg = 0.108043{dimensionless}+0.903902{dimensionless}/(1.0{dimensionless}+pow(mgo/0.281007{mM}, 1.29834{dimensionless}));
    gs_nao = 1{dimensionless}/0.0123{dimensionless}*0.03{dimensionless}/(1.0{dimensionless}+sqr(150.0{mM}/(nao+tinyamount)));
    gs_ko = 1{dimensionless}/0.0123{dimensionless}*0.03{dimensionless}/(1.0{dimensionless}+sqr(150.0{mM}/(ko+tinyamount)));
    gs_cao = 1{dimensionless}/0.000525{dimensionless}*0.03{dimensionless}/(1.0{dimensionless}+sqr(150.0{mM}/(cao+tinyamount)));
    insca = fmg*gs_cao*gnsCa*gns*(v-enscc);
    insna = fmg*gs_nao*gnsNa*gns*(v-enscc);
    insk = fmg*gs_ko*gnsK*gns*(v-enscc);
  enddef;
  def map between I_ns and environment for
    vars time and time;
  enddef;
  def map between I_ns and membrane_potential for
    vars v and v;
    vars insna and insna;
    vars insca and insca;
    vars insk and insk;
  enddef;
  def map between I_ns and parameters for
    vars enscc and enscc;
    vars gns and gns;
    vars gnsNa and gnsNa;
    vars gnsCa and gnsCa;
    vars gnsK and gnsK;
    vars nao and nao;
    vars cao and cao;
    vars ko and ko;
    vars mgo and mgo;
  enddef;
  // Model - currents

  def comp I_NaK as
    var fnak: dimensionless {pub: none};
    var knak: dimensionless {pub: none};
    var nnak: dimensionless {pub: none};
    var inak: uA_per_cm2 {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ginak: uA_per_cm2 {pub: in};
    var ko: mM {pub: in};
    var nao: mM {pub: in};
    var nai: mM {pub: in};
    var nakKmko: mM {pub: in};
    var nakKmnai: mM {pub: in};
    var vFRT: dimensionless {pub: in};
    fnak = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*vFRT)+0.00219{dimensionless}*exp(nao/49.71{mM})*exp(-1.9{dimensionless}*vFRT));
    knak = 1.0{dimensionless}/(1.0{dimensionless}+pow(nakKmko/ko, 1.5{dimensionless}));
    nnak = 1.0{dimensionless}/(1.0{dimensionless}+sqr(nakKmnai/nai));
    inak = ginak*knak*nnak*fnak;
  enddef;
  def map between I_NaK and environment for
    vars time and time;
  enddef;
  def map between I_NaK and membrane_potential for
    vars v and v;
    vars inak and inak;
  enddef;
  def map between I_NaK and parameters for
    vars nao and nao;
    vars nai and nai;
    vars ko and ko;
    vars ginak and ginak;
    vars nakKmko and nakKmko;
    vars nakKmnai and nakKmnai;
    vars vFRT and vFRT;
  enddef;
  // Model - currents

  def comp I_NaCa as
    var inaca_sign: dimensionless {init: -1, pub: none};
    var inaca: uA_per_cm2 {pub: out};
    var jnaca: mM_per_msec {pub: in};
    var buff: dimensionless {pub: in};
    var AV: cm2_per_uL {pub: in};
    var zca: dimensionless {pub: in};
    var frdy: coulomb_per_mole {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    inaca = 0.5{dimensionless}*zca*frdy/(AV*Cm*buff)*inaca_sign*jnaca;
  enddef;
  def map between I_NaCa and membrane_potential for
    vars inaca and inaca;
  enddef;
  def map between I_NaCa and J_NaCa for
    vars jnaca and jnaca;
  enddef;
  def map between I_NaCa and parameters for
    vars buff and buff;
    vars AV and AV;
    vars zca and zca;
    vars frdy and frdy;
    vars Cm and Cm;
  enddef;
  // Model - flux

  def comp J_NaCa as
    var f1naca: dimensionless {pub: none};
    var f2naca: dimensionless {pub: none};
    var fallo: dimensionless {pub: none};
    var naca_Eup: mM4 {pub: none};
    var naca_Ed1: dimensionless {pub: none};
    var naca_Ed2: mM4 {pub: none};
    var naca_Ed3: mM4 {pub: none};
    var jnaca_sign: dimensionless {init: -1, pub: none};
    var jnaca: mM_per_msec {pub: out};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var cao: mM {pub: in};
    var nao: mM {pub: in};
    var nai: mM {pub: in};
    var Jnaca: mM_per_msec {pub: in};
    var Kmallo: mM {pub: in};
    var nallo: dimensionless {pub: in};
    var ksat: dimensionless {pub: in};
    var xgamma: dimensionless {pub: in};
    var Kmnai: mM {pub: in};
    var Kmcai: mM {pub: in};
    var Kmnao: mM {pub: in};
    var Kmcao: mM {pub: in};
    var vFRT: dimensionless {pub: in};
    f1naca = exp((xgamma-1.0{dimensionless})*vFRT);
    f2naca = exp(xgamma*vFRT);
    fallo = 1.0{dimensionless}/(1.0{dimensionless}+pow(Kmallo/cai, nallo));
    naca_Eup = pow(nai, 3{dimensionless})*cao*f2naca-pow(nao, 3{dimensionless})*cai*f1naca;
    naca_Ed1 = 1.0{dimensionless}+ksat*f1naca;
    naca_Ed2 = Kmcao*pow(nai, 3{dimensionless})+pow(Kmnao, 3{dimensionless})*cai+pow(Kmnai, 3{dimensionless})*cao*(1.0{dimensionless}+cai/Kmcai);
    naca_Ed3 = cao*pow(nai, 3{dimensionless})+pow(nao, 3{dimensionless})*cai+pow(nao, 3{dimensionless})*Kmcai*(1.0{dimensionless}+pow(nai/Kmnai, 3{dimensionless}));
    jnaca = jnaca_sign*Jnaca*fallo*naca_Eup/(naca_Ed1*(naca_Ed2+naca_Ed3));
  enddef;
  def map between J_NaCa and membrane_potential for
    vars v and v;
  enddef;
  def map between J_NaCa and Ca_Concentrations for
    vars cai and cai;
    vars jnaca and jnaca;
  enddef;
  def map between J_NaCa and parameters for
    vars nao and nao;
    vars nai and nai;
    vars cao and cao;
    vars Jnaca and Jnaca;
    vars Kmallo and Kmallo;
    vars nallo and nallo;
    vars ksat and ksat;
    vars xgamma and xgamma;
    vars Kmnai and Kmnai;
    vars Kmcai and Kmcai;
    vars Kmnao and Kmnao;
    vars Kmcao and Kmcao;
    vars vFRT and vFRT;
  enddef;
  // Model - flux

  def comp J_PMCA as
    var jpmca: mM_per_msec {pub: out};
    var cai: mM {pub: in};
    var Jpmca: mM_per_msec {pub: in};
    var Kmpmca: mM {pub: in};
    var npmca: dimensionless {pub: in};
    jpmca = Jpmca/(1.0{dimensionless}+pow(Kmpmca/cai, npmca));
  enddef;
  def map between J_PMCA and Ca_Concentrations for
    vars cai and cai;
    vars jpmca and jpmca;
  enddef;
  def map between J_PMCA and parameters for
    vars Jpmca and Jpmca;
    vars Kmpmca and Kmpmca;
    vars npmca and npmca;
  enddef;
  // Model - Group

  def group as encapsulation for
    comp interface incl
      comp environment;
      comp parameters;
      comp membrane_potential;
      comp Ca_Concentrations;
      comp Ca_dependent_Force;
      comp I_Na;
      comp I_CaL;
      comp I_CaT;
      comp I_b;
      comp I_HERG;
      comp I_KCNQ1;
      comp I_KCNQ4;
      comp I_KCNQ5;
      comp I_K1;
      comp I_K2;
      comp I_Ka;
      comp I_BKa;
      comp I_BKab;
      comp I_h;
      comp I_Cl;
      comp I_ns;
      comp I_NaK;
      comp I_NaCa;
      comp J_NaCa;
      comp J_PMCA;
    endcomp;
  enddef;
  // Model - Mapping variables
enddef;
